OpenViBE-Scenario
Comment
  Fatigue: increase in low alpha and theta, dicrease high frequencies
Comment
  higher weight for alpha activity, low idx == fatigue

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:8"
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Smart
-> Common Average Reference
-> Channel Rename
  New channel names = O1;P7;F7;FP1;F8;T8;P8;O2
-> Identity => #4
-> Temporal filter "theta-alpha 4-10"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 10
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.25
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #9
  Equation = log(x)
-> Spatial Filter "average channels"
  Spatial Filter Coefficients = 1;1;1;1
  Number of Output Channels = 1
  Number of Input Channels = 4
-> Matrix Display "theta-alpha 4-10"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#9 -> Signal display "theta-alpha 4-10"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#4 -> Temporal filter "beta 15-20"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 15
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.25
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #17
  Equation = log(x)
Input - A=#9, Input - B=#17 -> Simple DSP => #18
  Equation = 0.25*b/a
-> Spatial Filter "average channels"
  Spatial Filter Coefficients = 1;1;1;1
  Number of Output Channels = 1
  Number of Input Channels = 4
-> Matrix Display "attention idx"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#18 -> Signal display "attention idx"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#18 -> 0xc67a01dc LSL Export (Gipsa)
  Stream name = attention
  Stream type = tobe
Data=#17 -> Signal display "beta 15-20"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#17 -> Spatial Filter "average channels"
  Spatial Filter Coefficients = 1;1;1;1
  Number of Output Channels = 1
  Number of Input Channels = 4
-> Matrix Display "beta 15-20"
  Color gradient = alpha
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
