OpenViBE-Scenario
Comment
  Workload: increase theta/delta in frontal, decrease alpha in occipital

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:8"
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Smart
-> Common Average Reference
-> Channel Rename
  New channel names = O1;P7;F7;FP1;F8;T8;P8;O2
-> Identity => #4
-> Channel Selector "F7;FP1;F8;T8"
  Channel List = F7;FP1;F8;T8
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "delta-theta 1-8"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 8
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.25
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #10
  Equation = log(x)
-> Spatial Filter "average channels"
  Spatial Filter Coefficients = 1;1;1;1
  Number of Output Channels = 1
  Number of Input Channels = 4
-> Matrix Display "delta-theta"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#10 -> Signal display "delta-theta"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#4 -> Channel Selector "O1;P7;P8;O2"
  Channel List = O1;P7;P8;O2
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "alpha 8-14"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 14
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.25
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #19
  Equation = log(x)
Input - A=#10, Input - B=#19 -> Simple DSP => #20
  Equation = a/b
-> Spatial Filter "average channels"
  Spatial Filter Coefficients = 1;1;1;1
  Number of Output Channels = 1
  Number of Input Channels = 4
-> Matrix Display "workload idx"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#20 -> Signal display "workload idx"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#20 -> 0xc67a01dc LSL Export (Gipsa)
  Stream name = workload
  Stream type = tobe
Data=#19 -> Signal display "alpha"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#19 -> Spatial Filter "average channels"
  Spatial Filter Coefficients = 1;1;1;1
  Number of Output Channels = 1
  Number of Input Channels = 4
-> Matrix Display "alpha"
  Color gradient = alpha
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
